CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Elsewhere...|D:\\My Stuff\\My Box Files\\iGEM(masakiyamada@berkeley.edu)\\Automation\\Images to Process
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):yRC030C- mid.zvi - C=2
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:yeast
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    Rescale intensities?:Yes

EnhanceEdges:[module_num:2|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
    Select the input image:yeast
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
EnhanceOrSuppressFeatures:[module_num:3|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
    Select the input image:EdgedImage
    Name the output image:FilteredBlue
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:1,60

RescaleIntensity:[module_num:4|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
    Select the input image:EdgedImage
    Name the output image:RescaledDIC
    Select rescaling method:Stretch each image to use the full intensity range
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
EnhanceEdges:[module_num:5|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
    Select the input image:RescaledDIC
    Name the output image:EdgedDIC
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Morph:[module_num:6|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
    Select the input image:EdgedDIC
    Name the output image:MorphDIC
    Select the operation to perform:close
    Number of times to repeat operation:Forever
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    Scale:10

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:MorphDIC
    Name the primary objects to be identified:Yeast
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor: 1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:3
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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