CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:["Load the images by matching files in the folder against the text pattern for each stain: 'hoe' for nuclei, 'h2ax' for the histone foci stain image. The two images together comprise an image set."]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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Elsewhere...|C:\\Users\\Thomas Chow\\Documents\\My Box Files\\iGEM\\Automation\\Actin images
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):yTC003-mid
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Image
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:Image
    Conversion method:Combine
    Image type::RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
ColorToGray:[module_num:3|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
    Select the input image:Image
    Conversion method:Split
    Image type::Channels
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    Channel count:3
    Channel number::Red: 1
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    Image name::Red
    Channel number::Green: 2
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    Image name::Green
    Channel number::Blue: 3
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    Image name::DIC

EnhanceEdges:[module_num:4|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
    Select the input image:DIC
    Name the output image:EdgedActinDIC
    Automatically calculate the threshold?:Yes
    Absolute threshold:0.2
    Threshold adjustment factor:.5
    Select an edge-finding method:Canny
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10
    Calculate value for low threshold automatically?:Yes
    Low threshold value:0.1

RescaleIntensity:[module_num:5|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
    Select the input image:EdgedActinDIC
    Name the output image:RescaledDIC
    Select rescaling method:Stretch each image to use the full intensity range
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
Morph:[module_num:6|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
    Select the input image:RescaledDIC
    Name the output image:MorphDIC
    Select the operation to perform:close
    Number of times to repeat operation:Forever
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    Scale:35

IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:MorphDIC
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):30,300
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
MaskImage:[module_num:8|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
    Select the input image:Red
    Name the output image:MaskRed
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:9|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
    Select the input image:Green
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

RescaleIntensity:[module_num:10|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
    Select the input image:MaskGreen
    Name the output image:RescaledActinGreen
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:11|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
    Select the input image:MaskRed
    Name the output image:RescaledActinRed
    Select rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:RescaledActinGreen
    Name the primary objects to be identified:ActinGreen
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:No
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:No
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    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:RescaledActinRed
    Name the primary objects to be identified:ActinRed
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:No
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:No
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    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:ActinGreen
    Select objects to measure:ActinRed
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:15|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Nucleus_Library_Check_Properties
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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    Data to export:ActinGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ActinRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
