CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Load desired images from folder. For this pipeline, the optimal image file type is .tif, with four channels : Red, Green, Blue, and DIC in that order.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Type the text that the excluded images have in common:RPL18B
    Analyze all subfolders within the selected folder?:None
    Input image file location:Elsewhere...|C:\\Users\\Thomas Chow\\Documents\\My Box Files\\iGEM\\Automation\\Actin images
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:Yes
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    Image count:1
    Text that these images have in common (case-sensitive):yTC003-mid
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Image
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['Now convert the colored images to grayscale, but separating each channel into red, green, and blue.']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
    Select the input image:Image
    Conversion method:Split
    Image type::Channels
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    Channel count:4
    Channel number::Red: 1
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    Image name::Red
    Channel number::Green: 2
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    Image name::Green
    Channel number::Blue: 3
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    Image name::Blue
    Channel number::Alpha: 4
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    Image name::Channel4

ColorToGray:[module_num:3|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
    Select the input image:Image
    Conversion method:Combine
    Image type::Channels
    Name the output image:OrigGray
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    Channel count:4
    Channel number::Red: 1
    Relative weight of the channel:1
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    Channel number::Green: 2
    Relative weight of the channel:1
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    Channel number::Blue: 3
    Relative weight of the channel:1
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    Channel number::Alpha: 4
    Relative weight of the channel:1
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
ColorToGray:[module_num:4|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notes:['Extract the DIC channel.']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
    Select the input image:Image
    Conversion method:Combine
    Image type::Channels
    Name the output image:DIC
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    Channel count:1
    Channel number::Alpha: 4
    Relative weight of the channel:1
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
EnhanceEdges:[module_num:5|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notes:['Find the edges of the cells, using the Canny edge detection function. This is a very sensitive method, and will detect weak edges, a common occurence in non-fluorescent images.']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
    Select the input image:DIC
    Name the output image:EdgedDIC
    Automatically calculate the threshold?:Yes
    Absolute threshold:0.2
    Threshold adjustment factor:2
    Select an edge-finding method:Canny
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10
    Calculate value for low threshold automatically?:Yes
    Low threshold value:0.1

RescaleIntensity:[module_num:6|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notes:['Rescale intensity of DIC image.']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
    Select the input image:EdgedDIC
    Name the output image:RescaledDIC
    Select rescaling method:Stretch each image to use the full intensity range
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
Morph:[module_num:7|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notes:['Dilate and erode the enhanced DIC image, to fill in the holes within the detected edges. This magnifies the intensity of the whole cell for downstream processing.']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
    Select the input image:RescaledDIC
    Name the output image:MorphDIC
    Select the operation to perform:close
    Number of times to repeat operation:Forever
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    Scale:35

IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the high intensity blobs produced by the dilation/erode iterations. ']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
    Select the input image:MorphDIC
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlinesDIC
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
RescaleIntensity:[module_num:9|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notes:['Rescale red channel.']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
    Select the input image:Red
    Name the output image:RescaledRed
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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notes:['Rescale green channel.']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
    Select the input image:Green
    Name the output image:RescaledGreen
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:11|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notes:['Rescale blue channel.']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
    Select the input image:Blue
    Name the output image:RescaledBlue
    Select rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:12|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notes:['Using the identified cells found in the DIC image, set the intensity of all pixels outside of the identified cells to zero. ']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
    Select the input image:RescaledGreen
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:13|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notes:['Using the identified cells found in the DIC image, set the intensity of all pixels outside of the identified cells to zero. ']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
    Select the input image:RescaledRed
    Name the output image:MaskRed
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:14|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notes:['Using the identified cells found in the DIC image, set the intensity of all pixels outside of the identified cells to zero. ']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
    Select the input image:RescaledBlue
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

Morph:[module_num:15|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
    Select the input image:MaskBlue
    Name the output image:ConnectedBlue
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:3

Morph:[module_num:16|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
    Select the input image:MaskRed
    Name the output image:ConnectedRed
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:3

Morph:[module_num:17|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
    Select the input image:MaskGreen
    Name the output image:ConnectedGreen
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:3

Morph:[module_num:18|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
    Select the input image:ConnectedGreen
    Name the output image:SeparatedGreen
    Select the operation to perform:open
    Number of times to repeat operation:Forever
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    Scale:3

Morph:[module_num:19|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
    Select the input image:ConnectedRed
    Name the output image:SeparatedRed
    Select the operation to perform:open
    Number of times to repeat operation:Forever
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    Scale:3

Morph:[module_num:20|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
    Select the input image:ConnectedBlue
    Name the output image:SeparatedBlue
    Select the operation to perform:open
    Number of times to repeat operation:Forever
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    Scale:3

IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:SeparatedRed
    Name the primary objects to be identified:NucleiRed
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,0.375
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Name the outline image:PrimaryOutlinesRed
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:SeparatedGreen
    Name the primary objects to be identified:NucleiGreen
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,0.375
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Name the outline image:PrimaryOutlinesGreen
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:SeparatedBlue
    Name the primary objects to be identified:NucleiBlue
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,0.375
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Name the outline image:PrimaryOutlinesBlue
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Green
    Name the output image:GreenGrayOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:PrimaryOutlinesGreen
    Select outline color:Red

MeasureObjectIntensity:[module_num:25|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
    Hidden:1
    Select an image to measure:RescaledGreen
    Select objects to measure:NucleiGreen

MeasureObjectIntensity:[module_num:26|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
    Hidden:1
    Select an image to measure:RescaledRed
    Select objects to measure:NucleiRed

MeasureObjectIntensity:[module_num:27|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
    Hidden:1
    Select an image to measure:RescaledBlue
    Select objects to measure:NucleiBlue

MeasureObjectSizeShape:[module_num:28|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
    Select objects to measure:NucleiGreen
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:29|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
    Select objects to measure:NucleiBlue
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:30|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
    Select objects to measure:NucleiRed
    Calculate the Zernike features?:No

FilterObjects:[module_num:31|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
    Name the output objects:FilteredGreen
    Select the object to filter:NucleiGreen
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:6
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.65
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1250
    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.3
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:50
    Select the measurement to filter by:Intensity_IntegratedIntensity_RescaledGreen
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:390
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:14.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:32|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
    Name the output objects:FilteredRed
    Select the object to filter:NucleiRed
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:6
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.65
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1250
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:50
    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.3
    Select the measurement to filter by:Intensity_IntegratedIntensity_RescaledRed
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:390
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:14.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:33|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
    Name the output objects:FilteredBlue
    Select the object to filter:NucleiBlue
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:6
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.65
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1250
    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.3
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:50
    Select the measurement to filter by:Intensity_IntegratedIntensity_RescaledBlue
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:390
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:14.5
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:34|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
    Select the input child objects:FilteredRed
    Select the input parent objects:Cells
    Calculate distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:35|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
    Select the input child objects:FilteredGreen
    Select the input parent objects:Cells
    Calculate distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:36|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
    Select the input child objects:FilteredBlue
    Select the input parent objects:Cells
    Calculate distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
MeasureObjectIntensity:[module_num:37|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
    Hidden:1
    Select an image to measure:RescaledBlue
    Select objects to measure:FilteredBlue

MeasureObjectIntensity:[module_num:38|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
    Hidden:1
    Select an image to measure:RescaledGreen
    Select objects to measure:FilteredGreen

MeasureObjectIntensity:[module_num:39|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
    Hidden:1
    Select an image to measure:RescaledRed
    Select objects to measure:FilteredRed

MeasureObjectSizeShape:[module_num:40|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
    Select objects to measure:FilteredGreen
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:41|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
    Select objects to measure:FilteredBlue
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:42|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
    Select objects to measure:FilteredRed
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:43|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Nucleus_Library_Check
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:NucleiRed|Intensity_StdIntensityEdge_RescaledRed,NucleiRed|Intensity_MinIntensity_RescaledRed,NucleiRed|Intensity_IntegratedIntensityEdge_RescaledRed,NucleiRed|Intensity_StdIntensity_RescaledRed,NucleiRed|Intensity_MassDisplacement_RescaledRed,NucleiRed|Intensity_UpperQuartileIntensity_RescaledRed,NucleiRed|Intensity_LowerQuartileIntensity_RescaledRed,NucleiRed|Intensity_MinIntensityEdge_RescaledRed,NucleiRed|Intensity_MeanIntensity_RescaledRed,NucleiRed|Intensity_MeanIntensityEdge_RescaledRed,NucleiRed|Intensity_MaxIntensity_RescaledRed,NucleiRed|Intensity_MedianIntensity_RescaledRed,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
    Data to export:FilteredBlue
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiBlue
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
