CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Load desired images from folder.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder sub-folder|Documents\\My Box Files\\iGEM\\Automation\\Nucleus_library_check\\Library ( .tiff format)
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):Nucleus_A
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Image
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['Convert the original colored images  to grayscale, with all channels merged.']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
    Select the input image:Image
    Conversion method:Combine
    Image type::RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
ColorToGray:[module_num:3|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notes:['Now convert the colored images to grayscale, but separating each channel into red, green, and blue.']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
    Select the input image:Image
    Conversion method:Split
    Image type::Channels
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    Channel count:4
    Channel number::Red: 1
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    Image name::Red
    Channel number::Green: 2
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    Image name::Green
    Channel number::Blue: 3
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    Image name::Blue
    Channel number::Alpha: 4
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    Image name::Channel4

GrayToColor:[module_num:4|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
    Select a color scheme:RGB
    Select the input image to be colored red:Red
    Select the input image to be colored green:Green
    Select the input image to be colored blue:Blue
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:5|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
    Select a color scheme:RGB
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    Select the input image to be colored green:Green
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    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:6|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
    Select a color scheme:RGB
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    Select the input image to be colored blue:Blue
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
RescaleIntensity:[module_num:7|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
    Select the input image:OrigGray
    Name the output image:RescaledComposite
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:Red
    Name the output image:RescaledRed
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:Green
    Name the output image:RescaledGreen
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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
    Select the input image:Blue
    Name the output image:RescaledBlue
    Select rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:RescaledGreen
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:12|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
    Select the input image:RescaledBlue
    Name the output image:EnhancedBlue
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:RescaledRed
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:RescaledComposite
    Name the output image:EnhancedComposite
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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
ApplyThreshold:[module_num:15|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
    Select the input image:EnhancedBlue
    Name the output image:ThreshBlue
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Select the thresholding method:RobustBackground Adaptive
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    Lower and upper bounds on threshold:0.2,0.7
    Threshold correction factor:3
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
ApplyThreshold:[module_num:16|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
    Select the input image:EnhancedGreen
    Name the output image:ThreshGreen
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Select the thresholding method:RobustBackground Adaptive
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    Lower and upper bounds on threshold:0.2,.7
    Threshold correction factor:3
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
ApplyThreshold:[module_num:17|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
    Select the input image:EnhancedRed
    Name the output image:ThreshRed
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Select the thresholding method:RobustBackground Adaptive
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    Lower and upper bounds on threshold:0.2,.7
    Threshold correction factor:3
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:RescaledComposite
    Name the primary objects to be identified:NucleiComposite
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:3
    Lower and upper bounds on threshold:0.2,0.7
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:RescaledRed
    Name the primary objects to be identified:NucleiRed
    Typical diameter of objects, in pixel units (Min,Max):15,35
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Adaptive
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,0.7
    Approximate fraction of image covered by objects?:0.01
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:RescaledGreen
    Name the primary objects to be identified:NucleiGreen
    Typical diameter of objects, in pixel units (Min,Max):15,35
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Adaptive
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,0.7
    Approximate fraction of image covered by objects?:0.01
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlinesGreen
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:RescaledBlue
    Name the primary objects to be identified:NucleiBlue
    Typical diameter of objects, in pixel units (Min,Max):15,35
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Adaptive
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,0.7
    Approximate fraction of image covered by objects?:0.01
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Green
    Name the output image:GreenGrayOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:PrimaryOutlinesGreen
    Select outline color:Red

MeasureObjectIntensity:[module_num:23|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
    Hidden:1
    Select an image to measure:RescaledGreen
    Select objects to measure:NucleiGreen

MeasureObjectIntensity:[module_num:24|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
    Hidden:1
    Select an image to measure:RescaledRed
    Select objects to measure:NucleiRed

MeasureObjectIntensity:[module_num:25|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
    Hidden:1
    Select an image to measure:RescaledBlue
    Select objects to measure:NucleiBlue

MeasureObjectIntensity:[module_num:26|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
    Hidden:1
    Select an image to measure:RescaledComposite
    Select objects to measure:NucleiComposite

MeasureObjectSizeShape:[module_num:27|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
    Select objects to measure:NucleiComposite
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:28|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
    Select objects to measure:NucleiGreen
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:29|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
    Select objects to measure:NucleiBlue
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:30|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
    Select objects to measure:NucleiRed
    Calculate the Zernike features?:No

FilterObjects:[module_num:31|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
    Name the output objects:FilteredComposite
    Select the object to filter:NucleiComposite
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:150
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:32|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
    Name the output objects:FilteredGreen
    Select the object to filter:NucleiGreen
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:150
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:33|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
    Name the output objects:FilteredRed
    Select the object to filter:NucleiRed
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:150
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:34|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
    Name the output objects:FilteredBlue
    Select the object to filter:NucleiBlue
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:150
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:35|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
    Select objects to measure:FilteredComposite
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:36|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
    Select objects to measure:FilteredGreen
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:37|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
    Select objects to measure:FilteredBlue
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:38|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
    Select objects to measure:FilteredRed
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:39|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents\\\\My Box Files\\\\iGEM\\\\Automation\\\\Nucleus_library_check\\\\Library ( .tiff format)\\\\Nucleus_Library_Check
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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    Data to export:FilteredBlue
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredComposite
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiComposite
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiBlue
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
