CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Load desired images from folder. For this pipeline, the optimal image file type is .tif, with four channels : Red, Green, Blue, and DIC in that order.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Type the text that the excluded images have in common:RPL18B
    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|C:\\Users\\Thomas Chow\\Documents\\My Box Files\\iGEM\\Automation\\Nucleus_library_check\\Library Segmented\\Nucleus_A
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:Yes
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    Image count:3
    Text that these images have in common (case-sensitive):Green Organelles Cell 12
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:GreenImage
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):Blue Organelles Cell 12
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:BlueImage
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):Red Organelles Cell 12
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:RedImage
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    Rescale intensities?:Yes

RescaleIntensity:[module_num:2|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notes:['Rescale red channel.']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
    Select the input image:RedImage
    Name the output image:RescaledRed
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:3|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notes:['Rescale green channel.']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
    Select the input image:GreenImage
    Name the output image:RescaledGreen
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:4|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notes:['Rescale blue channel.']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
    Select the input image:BlueImage
    Name the output image:RescaledBlue
    Select rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:RescaledRed
    Name the primary objects to be identified:NucleiRed
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Global
    Threshold correction factor:2
    Lower and upper bounds on threshold:.1,1.0
    Approximate fraction of image covered by objects?:.001
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Name the outline image:PrimaryOutlinesRed
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:RescaledGreen
    Name the primary objects to be identified:NucleiGreen
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Global
    Threshold correction factor:2
    Lower and upper bounds on threshold:.1,1.0
    Approximate fraction of image covered by objects?:.001
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Name the outline image:PrimaryOutlinesGreen
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:RescaledBlue
    Name the primary objects to be identified:NucleiBlue
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Global
    Threshold correction factor:2
    Lower and upper bounds on threshold:.1,1.0
    Approximate fraction of image covered by objects?:.001
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Name the outline image:PrimaryOutlinesBlue
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:RescaledGreen
    Select objects to measure:NucleiGreen

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:RescaledRed
    Select objects to measure:NucleiRed

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:RescaledBlue
    Select objects to measure:NucleiBlue

MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:NucleiGreen
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:NucleiBlue
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:NucleiRed
    Calculate the Zernike features?:No

FilterObjects:[module_num:14|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
    Name the output objects:FilteredGreen
    Select the object to filter:NucleiGreen
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:6
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.65
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1250
    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.3
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:50
    Select the measurement to filter by:Intensity_IntegratedIntensity_RescaledGreen
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:390
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:14.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:15|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
    Name the output objects:FilteredRed
    Select the object to filter:NucleiRed
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:6
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.65
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1250
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:50
    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.3
    Select the measurement to filter by:Intensity_IntegratedIntensity_RescaledRed
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:390
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:14.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:16|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
    Name the output objects:FilteredBlue
    Select the object to filter:NucleiBlue
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:6
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.65
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1250
    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.3
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:50
    Select the measurement to filter by:Intensity_IntegratedIntensity_RescaledBlue
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:390
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:14.5
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:17|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
    Hidden:1
    Select an image to measure:RescaledBlue
    Select objects to measure:FilteredBlue

MeasureObjectIntensity:[module_num:18|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
    Hidden:1
    Select an image to measure:RescaledGreen
    Select objects to measure:FilteredGreen

MeasureObjectIntensity:[module_num:19|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
    Hidden:1
    Select an image to measure:RescaledRed
    Select objects to measure:FilteredRed

MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:FilteredGreen
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:21|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
    Select objects to measure:FilteredBlue
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:22|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
    Select objects to measure:FilteredRed
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:23|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Nucleus_Library_Check
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:NucleiRed|Intensity_StdIntensityEdge_RescaledRed,NucleiRed|Intensity_MinIntensity_RescaledRed,NucleiRed|Intensity_IntegratedIntensityEdge_RescaledRed,NucleiRed|Intensity_StdIntensity_RescaledRed,NucleiRed|Intensity_MassDisplacement_RescaledRed,NucleiRed|Intensity_UpperQuartileIntensity_RescaledRed,NucleiRed|Intensity_LowerQuartileIntensity_RescaledRed,NucleiRed|Intensity_MinIntensityEdge_RescaledRed,NucleiRed|Intensity_MeanIntensity_RescaledRed,NucleiRed|Intensity_MeanIntensityEdge_RescaledRed,NucleiRed|Intensity_MaxIntensity_RescaledRed,NucleiRed|Intensity_MedianIntensity_RescaledRed,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
    Data to export:FilteredBlue
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiBlue
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
