CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Load desired images from folder.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Elsewhere...|C:\\Users\\Thomas Chow\\Documents\\My Box Files\\iGEM
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):1pre.zvi
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Image
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['Convert the original colored images  to grayscale, with all channels merged.']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
    Select the input image:Image
    Conversion method:Combine
    Image type::Channels
    Name the output image:OrigGray
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    Channel count:2
    Channel number::Red: 1
    Relative weight of the channel:1
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    Channel number::Green: 2
    Relative weight of the channel:1
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
ColorToGray:[module_num:3|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notes:['Now convert the colored images to grayscale, but separating each channel into red, green, and blue.']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
    Select the input image:Image
    Conversion method:Split
    Image type::Channels
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    Channel count:3
    Channel number::Red: 1
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    Image name::Red
    Channel number::Green: 2
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    Image name::Green
    Channel number::Blue: 3
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    Image name::Blue

RescaleIntensity:[module_num:4|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
    Select the input image:Red
    Name the output image:RescaledRed
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:5|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
    Select the input image:Green
    Name the output image:RescaledGreen
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:Blue
    Name the output image:RescaledBlue
    Select rescaling method:Stretch each image to use the full intensity range
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
EnhanceEdges:[module_num:7|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
    Select the input image:RescaledRed
    Name the output image:EdgedRed
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
EnhanceEdges:[module_num:8|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
    Select the input image:RescaledGreen
    Name the output image:EdgedGreen
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
EnhanceEdges:[module_num:9|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notes:['Sharpens the edges in the image.']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
    Select the input image:RescaledBlue
    Name the output image:EdgedBlue
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Morph:[module_num:10|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
    Select the input image:EdgedBlue
    Name the output image:ErodedBlue
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:3

Morph:[module_num:11|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
    Select the input image:EdgedGreen
    Name the output image:ErodedGreen
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:3

Morph:[module_num:12|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
    Select the input image:EdgedRed
    Name the output image:ErodedRed
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:3

RescaleIntensity:[module_num:13|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
    Select the input image:ErodedBlue
    Name the output image:RescaledErodedBlue
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:14|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
    Select the input image:ErodedRed
    Name the output image:RescaledErodedRed
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:15|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
    Select the input image:ErodedGreen
    Name the output image:RescaledErodedGreen
    Select rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:RescaledErodedBlue
    Name the primary objects to be identified:PlasmaMembranesBlue
    Typical diameter of objects, in pixel units (Min,Max):20,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:3
    Lower and upper bounds on threshold:0,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:PrimaryOutlinesBlue
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:RescaledErodedGreen
    Name the primary objects to be identified:PlasmaMembranesGreen
    Typical diameter of objects, in pixel units (Min,Max):20,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:3
    Lower and upper bounds on threshold:0,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:PrimaryOutlinesGreen
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:RescaledErodedRed
    Name the primary objects to be identified:PlasmaMembranesRed
    Typical diameter of objects, in pixel units (Min,Max):20,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:3
    Lower and upper bounds on threshold:0,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:PrimaryOutlinesRed
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectIntensity:[module_num:19|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
    Hidden:1
    Select an image to measure:Blue
    Select objects to measure:PlasmaMembranesBlue

MeasureObjectIntensity:[module_num:20|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
    Hidden:1
    Select an image to measure:Green
    Select objects to measure:PlasmaMembranesGreen

MeasureObjectIntensity:[module_num:21|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
    Hidden:1
    Select an image to measure:Red
    Select objects to measure:PlasmaMembranesRed

MeasureObjectSizeShape:[module_num:22|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
    Select objects to measure:PlasmaMembranesBlue
    Select objects to measure:PlasmaMembranesGreen
    Select objects to measure:PlasmaMembranesRed
    Calculate the Zernike features?:No

FilterObjects:[module_num:23|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
    Name the output objects:FilteredPMBlue
    Select the object to filter:PlasmaMembranesBlue
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.65

FilterObjects:[module_num:24|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
    Name the output objects:FilteredPMGreen
    Select the object to filter:PlasmaMembranesGreen
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.65

FilterObjects:[module_num:25|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
    Name the output objects:FilteredPMRed
    Select the object to filter:PlasmaMembranesRed
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.65

ConvertObjectsToImage:[module_num:26|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
    Select the input objects:FilteredPMBlue
    Name the output image:BlueChannel
    Select the color type:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:27|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
    Select the input objects:FilteredPMGreen
    Name the output image:GreenChannel
    Select the color type:Color
    Select the colormap:Default

MeasureObjectSizeShape:[module_num:28|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
    Select objects to measure:FilteredPMBlue
    Select objects to measure:FilteredPMGreen
    Select objects to measure:FilteredPMRed
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:29|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Nucleus_Library_Check_Properties
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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    Data to export:PlasmaMembranesBlue
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:PlasmaMembranesGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:PlasmaMembranesRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredPMRed
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredPMBlue
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredPMGreen
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:BlueChannel
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Image
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:B
    Select file format to use:png
    Output file location:Elsewhere...|C:\\\\Users\\\\Thomas Chow\\\\Documents\\\\My Box Files\\\\iGEM\\\\Automation\\\\PM_library_check\\\\PM 2
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:GreenChannel
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Image
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:G
    Select file format to use:png
    Output file location:Elsewhere...|C:\\\\Users\\\\Thomas Chow\\\\Documents\\\\My Box Files\\\\iGEM\\\\Automation\\\\PM_library_check\\\\PM 2
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
